PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Completed URL = https://kemaeri.github.io/ldt-dutch/debrief
  Data filename = u'data/participant_%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  End Message = Bedankt voor het meedoen!
  Experiment info = {'participant': '', 'list_no': '["1","2","3"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/audio/aandacht.wav', 'resources/audio/aannoelen.wav', 'resources/audio/aanpot.wav', 'resources/audio/aantal.wav', 'resources/audio/aas.wav', 'resources/audio/acteur.wav', 'resources/audio/acteurs.wav', 'resources/audio/acties.wav', 'resources/audio/adres.wav', 'resources/audio/adruis.wav', 'resources/audio/afcert.wav', 'resources/audio/afkol.wav', 'resources/audio/afspraak.wav', 'resources/audio/afstand.wav', 'resources/audio/afwas.wav', 'resources/audio/afziep.wav', 'resources/audio/alimd.wav', 'resources/audio/amateur.wav', 'resources/audio/amateurs.wav', 'resources/audio/antwoord.wav', 'resources/audio/appel.wav', 'resources/audio/appels.wav', 'resources/audio/applaus.wav', 'resources/audio/arroest.wav', 'resources/audio/arts.wav', 'resources/audio/auto.wav', 'resources/audio/baan.wav', 'resources/audio/baas.wav', 'resources/audio/baken.wav', 'resources/audio/ballen.wav', 'resources/audio/bap.wav', 'resources/audio/bark.wav', 'resources/audio/bedwag.wav', 'resources/audio/beelden.wav', 'resources/audio/been.wav', 'resources/audio/beer.wav', 'resources/audio/begin.wav', 'resources/audio/bellers.wav', 'resources/audio/bendes.wav', 'resources/audio/benen.wav', 'resources/audio/berg.wav', 'resources/audio/bergen.wav', 'resources/audio/bericht.wav', 'resources/audio/beslond.wav', 'resources/audio/bespeet.wav', 'resources/audio/beugels.wav', 'resources/audio/beuten.wav', 'resources/audio/bewijs.wav', 'resources/audio/bezems.wav', 'resources/audio/bezit.wav', 'resources/audio/bezoek.wav', 'resources/audio/biel.wav', 'resources/audio/biem.wav', 'resources/audio/biert.wav', 'resources/audio/blap.wav', 'resources/audio/blit.wav', 'resources/audio/bloemen.wav', 'resources/audio/blofuil.wav', 'resources/audio/blok.wav', 'resources/audio/blokken.wav', 'resources/audio/boek.wav', 'resources/audio/boeken.wav', 'resources/audio/boer.wav', 'resources/audio/boeren.wav', 'resources/audio/bonus.wav', 'resources/audio/bonzel.wav', 'resources/audio/boodschap.wav', 'resources/audio/boof.wav', 'resources/audio/bork.wav', 'resources/audio/brars.wav', 'resources/audio/bried.wav', 'resources/audio/bril.wav', 'resources/audio/broers.wav', 'resources/audio/brot.wav', 'resources/audio/bud.wav', 'resources/audio/bureau.wav', 'resources/audio/burger.wav', 'resources/audio/burgers.wav', 'resources/audio/cameras.wav', 'resources/audio/centen.wav', 'resources/audio/christen.wav', 'resources/audio/cijfers.wav', 'resources/audio/cillen.wav', 'resources/audio/circus.wav', 'resources/audio/collega.wav', 'resources/audio/collegas.wav', 'resources/audio/culsuur.wav', 'resources/audio/cursus.wav', 'resources/audio/cyclus.wav', 'resources/audio/daart.wav', 'resources/audio/daders.wav', 'resources/audio/dag.wav', 'resources/audio/dagen.wav', 'resources/audio/dame.wav', 'resources/audio/dames.wav', 'resources/audio/dansa.wav', 'resources/audio/dant.wav', 'resources/audio/dap.wav', 'resources/audio/dasten.wav', 'resources/audio/degen.wav', 'resources/audio/deken.wav', 'resources/audio/demel.wav', 'resources/audio/dest.wav', 'resources/audio/deuren.wav', 'resources/audio/didde.wav', 'resources/audio/diem.wav', 'resources/audio/dieren.wav', 'resources/audio/dilder.wav', 'resources/audio/ding.wav', 'resources/audio/dingen.wav', 'resources/audio/dochters.wav', 'resources/audio/doelen.wav', 'resources/audio/doking.wav', 'resources/audio/dokters.wav', 'resources/audio/dollars.wav', 'resources/audio/dolmen.wav', 'resources/audio/donen.wav', 'resources/audio/donut.wav', 'resources/audio/donuts.wav', 'resources/audio/dorpen.wav', 'resources/audio/dosis.wav', 'resources/audio/dovaan.wav', 'resources/audio/draden.wav', 'resources/audio/dromen.wav', 'resources/audio/droom.wav', 'resources/audio/drunk.wav', 'resources/audio/duimen.wav', 'resources/audio/duis.wav', 'resources/audio/dwee.wav', 'resources/audio/eiland.wav', 'resources/audio/examen.wav', 'resources/audio/excuus.wav', 'resources/audio/ezels.wav', 'resources/audio/feestje.wav', 'resources/audio/feik.wav', 'resources/audio/figier.wav', 'resources/audio/films.wav', 'resources/audio/fleusde.wav', 'resources/audio/fonds.wav', 'resources/audio/foto.wav', 'resources/audio/fotos.wav', 'resources/audio/fouten.wav', 'resources/audio/fraat.wav', 'resources/audio/frartoor.wav', 'resources/audio/frub.wav', 'resources/audio/furkel.wav', 'resources/audio/gars.wav', 'resources/audio/gast.wav', 'resources/audio/gasten.wav', 'resources/audio/gaten.wav', 'resources/audio/gebied.wav', 'resources/audio/gebouw.wav', 'resources/audio/gedocht.wav', 'resources/audio/gedoe.wav', 'resources/audio/gedrag.wav', 'resources/audio/geer.wav', 'resources/audio/gegeven.wav', 'resources/audio/geheugen.wav', 'resources/audio/geluid.wav', 'resources/audio/gemacht.wav', 'resources/audio/genok.wav', 'resources/audio/gerillen.wav', 'resources/audio/gevaar.wav', 'resources/audio/gevage.wav', 'resources/audio/gevoel.wav', 'resources/audio/gezicht.wav', 'resources/audio/gids.wav', 'resources/audio/gilier.wav', 'resources/audio/glanding.wav', 'resources/audio/glas.wav', 'resources/audio/glot.wav', 'resources/audio/gnole.wav', 'resources/audio/gorannen.wav', 'resources/audio/gous.wav', 'resources/audio/graak.wav', 'resources/audio/grappen.wav', 'resources/audio/groost.wav', 'resources/audio/grort.wav', 'resources/audio/guldel.wav', 'resources/audio/hals.wav', 'resources/audio/hand.wav', 'resources/audio/handen.wav', 'resources/audio/harg.wav', 'resources/audio/harnas.wav', 'resources/audio/hasten.wav', 'resources/audio/haven.wav', 'resources/audio/hawel.wav', 'resources/audio/hekte.wav', 'resources/audio/helg.wav', 'resources/audio/helk.wav', 'resources/audio/hemel.wav', 'resources/audio/hemmer.wav', 'resources/audio/heren.wav', 'resources/audio/herkoden.wav', 'resources/audio/heuk.wav', 'resources/audio/heup.wav', 'resources/audio/heupen.wav', 'resources/audio/heuvel.wav', 'resources/audio/heuvels.wav', 'resources/audio/hieden.wav', 'resources/audio/hittel.wav', 'resources/audio/hobbels.wav', 'resources/audio/honden.wav', 'resources/audio/hoods.wav', 'resources/audio/hoofden.wav', 'resources/audio/hotels.wav', 'resources/audio/hums.wav', 'resources/audio/hus.wav', 'resources/audio/idee.wav', 'resources/audio/ies.wav', 'resources/audio/indruk.wav', 'resources/audio/inhochten.wav', 'resources/audio/insect.wav', 'resources/audio/insecten.wav', 'resources/audio/intreek.wav', 'resources/audio/invorn.wav', 'resources/audio/inzweed.wav', 'resources/audio/jager.wav', 'resources/audio/jagers.wav', 'resources/audio/jerken.wav', 'resources/audio/jongen.wav', 'resources/audio/kaars.wav', 'resources/audio/kaart.wav', 'resources/audio/kaarten.wav', 'resources/audio/kaas.wav', 'resources/audio/kaden.wav', 'resources/audio/kamers.wav', 'resources/audio/kansen.wav', 'resources/audio/kantoor.wav', 'resources/audio/kapie.wav', 'resources/audio/kapsels.wav', 'resources/audio/karste.wav', 'resources/audio/kasteel.wav', 'resources/audio/katten.wav', 'resources/audio/keizer.wav', 'resources/audio/kekst.wav', 'resources/audio/kels.wav', 'resources/audio/kennis.wav', 'resources/audio/kerel.wav', 'resources/audio/kerels.wav', 'resources/audio/kermis.wav', 'resources/audio/keten.wav', 'resources/audio/keuken.wav', 'resources/audio/keuzes.wav', 'resources/audio/kimpen.wav', 'resources/audio/kipt.wav', 'resources/audio/klant.wav', 'resources/audio/klanten.wav', 'resources/audio/kledeet.wav', 'resources/audio/klens.wav', 'resources/audio/kles.wav', 'resources/audio/kliep.wav', 'resources/audio/klinkers.wav', 'resources/audio/kliteek.wav', 'resources/audio/kliter.wav', 'resources/audio/klokken.wav', 'resources/audio/kloosters.wav', 'resources/audio/kluis.wav', 'resources/audio/klyppel.wav', 'resources/audio/knes.wav', 'resources/audio/knil.wav', 'resources/audio/knoer.wav', 'resources/audio/knoop.wav', 'resources/audio/knopen.wav', 'resources/audio/knoppen.wav', 'resources/audio/kodaal.wav', 'resources/audio/koers.wav', 'resources/audio/koets.wav', 'resources/audio/koffer.wav', 'resources/audio/koffers.wav', 'resources/audio/komoet.wav', 'resources/audio/kompas.wav', 'resources/audio/koning.wav', 'resources/audio/koppen.wav', 'resources/audio/kos.wav', 'resources/audio/kostuum.wav', 'resources/audio/kostuums.wav', 'resources/audio/kraad.wav', 'resources/audio/krakin.wav', 'resources/audio/kransing.wav', 'resources/audio/kranten.wav', 'resources/audio/kreukels.wav', 'resources/audio/krij.wav', 'resources/audio/krijger.wav', 'resources/audio/krijgers.wav', 'resources/audio/krivieken.wav', 'resources/audio/krommel.wav', 'resources/audio/krook.wav', 'resources/audio/kuiken.wav', 'resources/audio/kussen.wav', 'resources/audio/ladders.wav', 'resources/audio/laken.wav', 'resources/audio/lals.wav', 'resources/audio/landen.wav', 'resources/audio/lates.wav', 'resources/audio/laver.wav', 'resources/audio/leger.wav', 'resources/audio/leiders.wav', 'resources/audio/leiding.wav', 'resources/audio/letter.wav', 'resources/audio/letters.wav', 'resources/audio/leugen.wav', 'resources/audio/leven.wav', 'resources/audio/lichten.wav', 'resources/audio/liefde.wav', 'resources/audio/lijf.wav', 'resources/audio/lijnen.wav', 'resources/audio/lijzer.wav', 'resources/audio/lippen.wav', 'resources/audio/loem.wav', 'resources/audio/long.wav', 'resources/audio/longen.wav', 'resources/audio/loping.wav', 'resources/audio/lopmel.wav', 'resources/audio/lucifer.wav', 'resources/audio/lucifers.wav', 'resources/audio/lud.wav', 'resources/audio/maanden.wav', 'resources/audio/mand.wav', 'resources/audio/mannen.wav', 'resources/audio/manper.wav', 'resources/audio/mas.wav', 'resources/audio/maskers.wav', 'resources/audio/matras.wav', 'resources/audio/meesters.wav', 'resources/audio/meneer.wav', 'resources/audio/mens.wav', 'resources/audio/mijnen.wav', 'resources/audio/mippen.wav', 'resources/audio/mipper.wav', 'resources/audio/missie.wav', 'resources/audio/moeders.wav', 'resources/audio/moeite.wav', 'resources/audio/moeras.wav', 'resources/audio/molen.wav', 'resources/audio/moment.wav', 'resources/audio/monsters.wav', 'resources/audio/motor.wav', 'resources/audio/motting.wav', 'resources/audio/mowool.wav', 'resources/audio/muziek.wav', 'resources/audio/naald.wav', 'resources/audio/naalden.wav', 'resources/audio/nachten.wav', 'resources/audio/nagels.wav', 'resources/audio/nas.wav', 'resources/audio/navurf.wav', 'resources/audio/negen.wav', 'resources/audio/nesten.wav', 'resources/audio/neugd.wav', 'resources/audio/nieuws.wav', 'resources/audio/non.wav', 'resources/audio/nonnen.wav', 'resources/audio/noorden.wav', 'resources/audio/nummers.wav', 'resources/audio/nuur.wav', 'resources/audio/ochtend.wav', 'resources/audio/oester.wav', 'resources/audio/oesters.wav', 'resources/audio/ogen.wav', 'resources/audio/ogjesk.wav', 'resources/audio/olie.wav', 'resources/audio/ontbijt.wav', 'resources/audio/ontzeps.wav', 'resources/audio/onzin.wav', 'resources/audio/oosten.wav', 'resources/audio/oppas.wav', 'resources/audio/opplad.wav', 'resources/audio/optreden.wav', 'resources/audio/orders.wav', 'resources/audio/orrijn.wav', 'resources/audio/ouders.wav', 'resources/audio/oven.wav', 'resources/audio/paam.wav', 'resources/audio/padem.wav', 'resources/audio/pagina.wav', 'resources/audio/paginas.wav', 'resources/audio/paleis.wav', 'resources/audio/pals.wav', 'resources/audio/paniek.wav', 'resources/audio/pans.wav', 'resources/audio/papeur.wav', 'resources/audio/parel.wav', 'resources/audio/parels.wav', 'resources/audio/partners.wav', 'resources/audio/pauze.wav', 'resources/audio/pemmo.wav', 'resources/audio/pengel.wav', 'resources/audio/penzing.wav', 'resources/audio/persoon.wav', 'resources/audio/pijl.wav', 'resources/audio/pijlen.wav', 'resources/audio/pijver.wav', 'resources/audio/pilijk.wav', 'resources/audio/pillen.wav', 'resources/audio/pippen.wav', 'resources/audio/plaatsen.wav', 'resources/audio/plan.wav', 'resources/audio/planeet.wav', 'resources/audio/plannen.wav', 'resources/audio/plant.wav', 'resources/audio/planten.wav', 'resources/audio/plek.wav', 'resources/audio/pluchten.wav', 'resources/audio/politie.wav', 'resources/audio/pomt.wav', 'resources/audio/poom.wav', 'resources/audio/porkoor.wav', 'resources/audio/pors.wav', 'resources/audio/poster.wav', 'resources/audio/posters.wav', 'resources/audio/prinses.wav', 'resources/audio/problemen.wav', 'resources/audio/procent.wav', 'resources/audio/projoet.wav', 'resources/audio/prust.wav', 'resources/audio/punten.wav', 'resources/audio/ragding.wav', 'resources/audio/ralor.wav', 'resources/audio/raptart.wav', 'resources/audio/rebby.wav', 'resources/audio/rechters.wav', 'resources/audio/reden.wav', 'resources/audio/reeks.wav', 'resources/audio/reer.wav', 'resources/audio/regel.wav', 'resources/audio/regels.wav', 'resources/audio/regen.wav', 'resources/audio/rengen.wav', 'resources/audio/res.wav', 'resources/audio/respect.wav', 'resources/audio/rest.wav', 'resources/audio/ridder.wav', 'resources/audio/ridders.wav', 'resources/audio/ries.wav', 'resources/audio/rimpels.wav', 'resources/audio/ripge.wav', 'resources/audio/risicos.wav', 'resources/audio/robot.wav', 'resources/audio/robots.wav', 'resources/audio/roetter.wav', 'resources/audio/roffen.wav', 'resources/audio/rokers.wav', 'resources/audio/roogsel.wav', 'resources/audio/rots.wav', 'resources/audio/rotsen.wav', 'resources/audio/scheegte.wav', 'resources/audio/schern.wav', 'resources/audio/schoenen.wav', 'resources/audio/schouder.wav', 'resources/audio/schouders.wav', 'resources/audio/schrijvers.wav', 'resources/audio/schulling.wav', 'resources/audio/schunder.wav', 'resources/audio/sefhoren.wav', 'resources/audio/seizoenen.wav', 'resources/audio/sekken.wav', 'resources/audio/sigier.wav', 'resources/audio/sirene.wav', 'resources/audio/sirenes.wav', 'resources/audio/slacond.wav', 'resources/audio/slading.wav', 'resources/audio/slang.wav', 'resources/audio/slangen.wav', 'resources/audio/slening.wav', 'resources/audio/sleutel.wav', 'resources/audio/sleutels.wav', 'resources/audio/slift.wav', 'resources/audio/slingers.wav', 'resources/audio/smaan.wav', 'resources/audio/smelk.wav', 'resources/audio/smoed.wav', 'resources/audio/smofes.wav', 'resources/audio/sneef.wav', 'resources/audio/sneppel.wav', 'resources/audio/snevel.wav', 'resources/audio/sokken.wav', 'resources/audio/soorten.wav', 'resources/audio/speler.wav', 'resources/audio/spelers.wav', 'resources/audio/spieren.wav', 'resources/audio/spijker.wav', 'resources/audio/spijkers.wav', 'resources/audio/spoer.wav', 'resources/audio/spol.wav', 'resources/audio/spollen.wav', 'resources/audio/sprading.wav', 'resources/audio/stam.wav', 'resources/audio/stammen.wav', 'resources/audio/stantte.wav', 'resources/audio/stapels.wav', 'resources/audio/stemmen.wav', 'resources/audio/stempels.wav', 'resources/audio/stemte.wav', 'resources/audio/ster.wav', 'resources/audio/sterren.wav', 'resources/audio/steup.wav', 'resources/audio/stid.wav', 'resources/audio/stijp.wav', 'resources/audio/stoffen.wav', 'resources/audio/storang.wav', 'resources/audio/storn.wav', 'resources/audio/streep.wav', 'resources/audio/strepen.wav', 'resources/audio/strijder.wav', 'resources/audio/strijders.wav', 'resources/audio/stuin.wav', 'resources/audio/stuk.wav', 'resources/audio/stulee.wav', 'resources/audio/succes.wav', 'resources/audio/systeem.wav', 'resources/audio/talekt.wav', 'resources/audio/tanden.wav', 'resources/audio/tapeuk.wav', 'resources/audio/tarm.wav', 'resources/audio/tasen.wav', 'resources/audio/tasteur.wav', 'resources/audio/tek.wav', 'resources/audio/teken.wav', 'resources/audio/tenkkiek.wav', 'resources/audio/tentamen.wav', 'resources/audio/terras.wav', 'resources/audio/tert.wav', 'resources/audio/tes.wav', 'resources/audio/tiek.wav', 'resources/audio/tiener.wav', 'resources/audio/tieners.wav', 'resources/audio/tijn.wav', 'resources/audio/tist.wav', 'resources/audio/toekomst.wav', 'resources/audio/toenacht.wav', 'resources/audio/toets.wav', 'resources/audio/tond.wav', 'resources/audio/toren.wav', 'resources/audio/traga.wav', 'resources/audio/trekkers.wav', 'resources/audio/trep.wav', 'resources/audio/troksem.wav', 'resources/audio/tunnels.wav', 'resources/audio/twijfels.wav', 'resources/audio/types.wav', 'resources/audio/vaast.wav', 'resources/audio/varen.wav', 'resources/audio/varken.wav', 'resources/audio/vas.wav', 'resources/audio/velden.wav', 'resources/audio/verganden.wav', 'resources/audio/verglad.wav', 'resources/audio/verhaal.wav', 'resources/audio/verlaar.wav', 'resources/audio/verlies.wav', 'resources/audio/vermoeden.wav', 'resources/audio/vermogen.wav', 'resources/audio/verploef.wav', 'resources/audio/verrier.wav', 'resources/audio/verschil.wav', 'resources/audio/verstand.wav', 'resources/audio/vert.wav', 'resources/audio/vertrek.wav', 'resources/audio/vertrouwen.wav', 'resources/audio/verwij.wav', 'resources/audio/verwoor.wav', 'resources/audio/verzet.wav', 'resources/audio/veulen.wav', 'resources/audio/vinger.wav', 'resources/audio/vingers.wav', 'resources/audio/vis.wav', 'resources/audio/vissen.wav', 'resources/audio/visser.wav', 'resources/audio/vissers.wav', 'resources/audio/vlam.wav', 'resources/audio/vlammen.wav', 'resources/audio/vlek.wav', 'resources/audio/vlekken.wav', 'resources/audio/vliegtuig.wav', 'resources/audio/vliffel.wav', 'resources/audio/vlinder.wav', 'resources/audio/vlinders.wav', 'resources/audio/voch.wav', 'resources/audio/vodef.wav', 'resources/audio/voet.wav', 'resources/audio/voeten.wav', 'resources/audio/vogel.wav', 'resources/audio/vogels.wav', 'resources/audio/volloe.wav', 'resources/audio/vonnis.wav', 'resources/audio/voorgakt.wav', 'resources/audio/voornemen.wav', 'resources/audio/voornerf.wav', 'resources/audio/voortiel.wav', 'resources/audio/vormen.wav', 'resources/audio/vrede.wav', 'resources/audio/vriend.wav', 'resources/audio/vrienden.wav', 'resources/audio/vrouwen.wav', 'resources/audio/vuilnis.wav', 'resources/audio/vuut.wav', 'resources/audio/waardes.wav', 'resources/audio/waat.wav', 'resources/audio/wachters.wav', 'resources/audio/wagen.wav', 'resources/audio/walvis.wav', 'resources/audio/wanst.wav', 'resources/audio/wanveep.wav', 'resources/audio/wapen.wav', 'resources/audio/week.wav', 'resources/audio/weken.wav', 'resources/audio/wels.wav', 'resources/audio/wengen.wav', 'resources/audio/wens.wav', 'resources/audio/wensen.wav', 'resources/audio/wereld.wav', 'resources/audio/westen.wav', 'resources/audio/wetten.wav', 'resources/audio/wezen.wav', 'resources/audio/wiel.wav', 'resources/audio/wielen.wav', 'resources/audio/wievel.wav', 'resources/audio/winkels.wav', 'resources/audio/winter.wav', 'resources/audio/wipsen.wav', 'resources/audio/wiro.wav', 'resources/audio/woede.wav', 'resources/audio/wolken.wav', 'resources/audio/womel.wav', 'resources/audio/wond.wav', 'resources/audio/wonden.wav', 'resources/audio/wonder.wav', 'resources/audio/woorden.wav', 'resources/audio/wortel.wav', 'resources/audio/wortels.wav', 'resources/audio/wukker.wav', 'resources/audio/zadels.wav', 'resources/audio/zaken.wav', 'resources/audio/zalder.wav', 'resources/audio/zan.wav', 'resources/audio/zarder.wav', 'resources/audio/zas.wav', 'resources/audio/zegen.wav', 'resources/audio/zek.wav', 'resources/audio/zetver.wav', 'resources/audio/zetzerken.wav', 'resources/audio/ziektes.wav', 'resources/audio/zielen.wav', 'resources/audio/zis.wav', 'resources/audio/zoe.wav', 'resources/audio/zomers.wav', 'resources/audio/zorg.wav', 'resources/audio/zorgen.wav', 'resources/audio/zuiden.wav', 'resources/audio/zun.wav', 'resources/audio/zwaktes.wav', 'resources/audio/zwerver.wav', 'resources/audio/zwervers.wav', 'resources/list1.xlsx', 'resources/list2.xlsx', 'resources/list3.xlsx', 'resources/practice.xlsx', 'resources/volume_icon.png']
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = ldt-dutch
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcomeText
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        ***** WOORDHERKENNINGSEXPERIMENT *****

        Op het scherm verschijnen straks woorden. Sommige zijn echte Nederlandse woorden en sommige zijn nepwoorden. Het doel is om te bepalen of het getoonde woord echt is of nep.

        Druk op [J] als het woord echt is.
        Druk op [F] als het woord nep is.

        We gaan eerst even oefenen.

        Druk op de [SPATIEBALK] om verder te gaan.
    KeyboardComponent welcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine fix
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    CodeComponent intervalCode
      Code Type = Auto->JS
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      Begin Routine:
        interval = (randint(0,700) + 300) / 1000
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $interval
      text [set every repeat] = +
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  Routine primeStim
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    SoundComponent primeAudio
      sound [set every repeat] = $'resources/audio/%s'%(prime_audio)
      startVal [time (s)] = 0.1
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    ImageComponent primeImage
      image = resources/volume_icon.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent primeText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = [ F ] nep                   [ J ] echt
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    KeyboardComponent primeKey
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $prime_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback
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    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        primed = True
      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        primed = not primed

        try:
            if primed == False:
                if primeKey.corr:
                    fb_text = 'O'
                    fb_col = 'green'
                else:
                    fb_text = 'X'
                    fb_col = 'red'
            if primed == True:
                if targetKey.corr:
                    fb_text = 'O'
                    fb_col = 'green'
                else:
                    fb_text = 'X'
                    fb_col = 'red'

        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent feedbackText
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb_text
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  Routine targetStim
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    SoundComponent targetAudio
      sound [set every repeat] = $'resources/audio/%s'%(target_audio)
      startVal [time (s)] = 0.1
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    ImageComponent targetImage
      image = resources/volume_icon.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent targetText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = [ F ] nep                   [ J ] echt
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    KeyboardComponent targetKey
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $target_corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine start
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    TextComponent startText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** EINDE OEFENWOORDEN *****

        We gaan nu verder met het echte experiment. Ga bij alle keuzes uit van het standaard Nederlands. Dialectwoorden zijn buiten beschouwing gelaten.

        Het experiment is opgedeeld in meerdere blokken. Tussen de blokken is er steeds een moment waarop je kunt pauzeren.

        Werk zo SNEL en zo GOED mogelijk.

        Veel succes!

        Druk op de [SPATIEBALK] om te beginnen
    KeyboardComponent startKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine pause
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    CodeComponent breakCode
      Code Type = Both
      Begin Experiment:
        def multiples(value, length):
            return [*range(value, length*value+1, value)]

        breakN = 0
        breakOn = multiples(24,12)
      Begin JS Experiment:
        function multiples(value, length) {
            return [...util.range(value, ((length * value) + 1), value)];
        }
        breakN = 0;
        breakOn = multiples(24, 12);
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (_pj.in_es6((trials.thisN + 1), breakOn.slice(0, (- 1)))) {
            continueRoutine = true;
            breakText.setText("");
            breakN = (breakN + 1);
            text = `Dit was blok ${breakN} van de ${breakOn.length}

            Druk op de [ SPATIEBALK ] om verder te gaan.`;
            breakText.setText(text);
        } else {
            continueRoutine = false;
        }
      Begin Routine:
        if trials.thisN+1 in breakOn[:-1]:
            continueRoutine = True
            breakText.setText("")
            breakN = breakN + 1
            text = 'Dit was blok %s van de %s.\n\n Druk op de [ SPATIEBALK ] om verder te gaan.'%(breakN, len(breakOn))
            breakText.setText(text)
        else:
            continueRoutine = False
    TextComponent breakText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent breakKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
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    CodeComponent codeEnd
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = "list_" + expInfo["list_no"] + "_participant_" + expInfo["participant"] + "_" + psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime;

        // Convert data object to JSON
        let dataJSON = JSON.stringify(psychoJS.experiment._trialsData);

        // Send data to OSF
        fetch("https://pipe.jspsych.org/api/data/", {
              method: "POST",
              headers: {
                "Content-Type": "application/json",
                Accept: "*/*",
              },
              body: JSON.stringify({
                experimentID: "ZEVejS01TpMw",
                filename: `${filename}.json`,
                data: dataJSON,
              }),
        }).then(response => response.json()).then(data => {
            console.log(data);
            quitPsychoJS("De antwoorden zijn opgeslagen. Bedankt voor het meedoen!",true);
        });
    TextComponent endText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** EINDE *****

        Een moment geduld a.u.b.
        De antwoorden worden opgeslagen...
Flow
  Routine welcome
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = resources/practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimID': 'a', 'stimType': 'practice', 'prime': 'pippen', 'target': 'kaas', 'prime_cond': 'practice', 'target_cond': 'practice', 'prime_lex': 'nw', 'target_lex': 'w', 'prime_corrAns': 'f', 'target_corrAns': 'j', 'prime_audio': 'pippen.wav', 'target_audio': 'kaas.wav'},
      {'stimID': 'b', 'stimType': 'practice', 'prime': 'beer', 'target': 'demel', 'prime_cond': 'practice', 'target_cond': 'practice', 'prime_lex': 'w', 'target_lex': 'nw', 'prime_corrAns': 'j', 'target_corrAns': 'f', 'prime_audio': 'beer.wav', 'target_audio': 'demel.wav'},
      {'stimID': 'c', 'stimType': 'practice', 'prime': 'schulling', 'target': 'mand', 'prime_cond': 'practice', 'target_cond': 'practice', 'prime_lex': 'nw', 'target_lex': 'w', 'prime_corrAns': 'f', 'target_corrAns': 'j', 'prime_audio': 'schulling.wav', 'target_audio': 'mand.wav'}]
    Routine fix
    Routine primeStim
    Routine feedback
    Routine fix
    Routine targetStim
    Routine feedback
  LoopTerminator practice
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditions = []
    conditionsFile = $"resources/list"+ expInfo["list_no"] +".xlsx"
    loopType = random
    nReps = 1
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    Routine fix
    Routine primeStim
    Routine fix
    Routine targetStim
    Routine pause
  LoopTerminator trials
  Routine end
